OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#0.Signal stream -> Channel Selector "O1;O2;Pz"
  Channel List = O1;O2;Pz
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 14.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 9
  Max crop value = 15
-> Simple DSP => #8
  Equation = x-9
Input signal=#8 -> LSL Export (Gipsa)
  Stream name = PongPlayer2
  Stream type = ECoG_2
Data=#8 -> Signal display "Player 2 Alpha power"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
