OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Select the desire channels from the Channel Selector
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Spatial Filter
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter "band-pass 8-12Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "Band power" => #4
  Equation = x*x
-> Signal average
-> Crop
  Crop method = Min/Max
  Min crop value = 5.3
  Max crop value = 100
-> Simple DSP => #7
  Equation = x-5.30
Data=#7 -> Signal display "Alpha Trace"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#7 -> LSL Export (Gipsa)
  Stream name = Player_1_stream
  Stream type = EEG
Data=#4 -> Signal display "Bandpassed Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Signal stream, Stimulations=#0.Stimulations -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
