OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Overview

  This scenario allows to run
  an online self-paced session of feet motor imagery
  No instructions are presented to the user.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-tie-fighter to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  Select the desire channels from the Channel Selector
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

  Finally it's cropped and shifted to be sent
   to the tie-fighter application via VRPN
Comment
  These two boxes (Crop and simple DSP)  are configured
  with respect to a previous calibration session.
  See threshold_movement_calibration.xml

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  VRPN
  The button Server tells the tie-fighter application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Spatial Filter
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter "band-pass 16-24Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "Band power" => #4
  Equation = x*x
-> Signal average
-> Crop
  Crop method = Min/Max
  Min crop value = 5.3
  Max crop value = 100
-> Simple DSP => #7
  Equation = x-5.30
Data=#7 -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#7 -> LSL Export (Gipsa)
  Stream name = Player_1_stream
  Stream type = EEG
Data=#4 -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Signal stream, Stimulations=#0.Stimulations -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
